PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
    RoutineSettingsComponent trial
      stopVal [duration (s)] = 7
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    PolygonComponent polygon
      fillColor = white
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        from psychopy.hardware.camera import Camera, CameraDevice

        cam = Camera(CameraDevice(
                device="/dev/video0",
                captureLib="ffpyplayer",
                frameSize=(640, 480),
                frameRate=30.0,
                pixelFormat=None,
                codecFormat="mjpg",
                captureAPI="Video4Linux2"
            ))
        cam.open()
      Begin Routine:
        cam.record()
      Each Frame:
        cam.poll()
      End Experiment:
        cam.close()
      End Routine:
        cam.stop()
        cam.save("final.mp4",useThreads=True)
Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    Routine trial
  LoopTerminator trials
